CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:30
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:Input
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Series

ColorToGray:[module_num:5|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notes:['Split channels from image and give meaningful names']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
    Select the input image:Input
    Conversion method:Split
    Image type:Channels
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    Channel count:4
    Channel number:1
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    Image name:Probe
    Channel number:2
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    Image name:rRNA
    Channel number:3
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    Image name:RPA194
    Channel number:4
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    Image name:NPM1

MeasureImageIntensity:[module_num:6|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
    Select images to measure:NPM1, Probe, RPA194, rRNA
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:Yes
    Specify percentiles to measure:5

ImageMath:[module_num:7|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
    Operation:Subtract
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:NPM1_subtracted
    Image or measurement?:Image
    Select the first image:NPM1
    Multiply the first image by:1.0
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    Image or measurement?:Measurement
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    Multiply the second image by:1.0
    Measurement:Intensity_Percentile_5_NPM1

GaussianFilter:[module_num:8|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
    Select the input image:NPM1_subtracted
    Name the output image:NPM1_filtered
    Sigma:5

IdentifyPrimaryObjects:[module_num:9|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notes:['Find GC within the input image.  Parameters tuned to pick out GC with varying intensity across cells.']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
    Select the input image:NPM1_filtered
    Name the primary objects to be identified:InitialGC
    Typical diameter of objects, in pixel units (Min,Max):10,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:None
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    Fill holes in identified objects?:After both thresholding and declumping
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    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
    Size of adaptive window:50
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    Thresholding method:Otsu

SplitOrMergeObjects:[module_num:10|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notes:['Merge GC within 100 pixels as "cells"']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
    Select the input objects:InitialGC
    Name the new objects:MergedGC
    Operation:Merge
    Maximum distance within which to merge objects:10
    Merge using a grayscale image?:No
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    Merging method:Distance
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
DilateObjects:[module_num:11|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notes:['Dilate GC to pick out FCs outside of GC']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enabled:False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
    Select the input object:MergedGC
    Name the output object:DilatedGC
    Structuring element:disk,2

ErodeObjects:[module_num:12|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
    Select the input object:InitialGC
    Name the output object:ErodedGC
    Structuring element:disk,2
    Prevent object removal:Yes
    Relabel resulting objects:No

MaskImage:[module_num:13|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notes:['Mask FC image with dilated GC mask.']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
    Select the input image:RPA194
    Name the output image:MaskRPA194
    Use objects or an image as a mask?:Objects
    Select object for mask:InitialGC
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    Invert the mask?:No

EnhanceOrSuppressFeatures:[module_num:14|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notes:['Highlight FCs with diameter around 20 pixels, improves FC finding in next step.']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
    Select the input image:MaskRPA194
    Name the output image:EnhancedRPA194
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
MeasureObjectIntensity:[module_num:15|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
    Select images to measure:EnhancedRPA194, RPA194
    Select objects to measure:ErodedGC, InitialGC

IdentifyPrimaryObjects:[module_num:16|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notes:['Find FCs.  Parameters adjusted to pick out most in plane FCs']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
    Select the input image:EnhancedRPA194
    Name the primary objects to be identified:InitialFC
    Typical diameter of objects, in pixel units (Min,Max):5,150
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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    Size of adaptive window:100
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:17|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notes:['Measure sizes and shapes of nearly all objects']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
    Select object sets to measure:InitialFC, InitialGC, MergedGC
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RelateObjects:[module_num:18|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
    Parent objects:MergedGC
    Child objects:InitialFC
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:19|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notes:['Relate all objects back to merged GC for analysis']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
    Parent objects:MergedGC
    Child objects:InitialGC
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:20|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
    Parent objects:MergedGC
    Child objects:ErodedGC
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MeasureRdf:[module_num:21|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notes:['Measure RDF of each FC as a point source.']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
    Input image:Input
    Input objects:InitialFC
    Object masks:ErodedGC
    RDF radius:26
    Channels:1,2,3,4
    Consider rdf from point:Yes

ConvertObjectsToImage:[module_num:22|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
    Select the input objects:ErodedGC
    Name the output image:ErodedGC_Image
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:23|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
    Select the input objects:MergedGC
    Name the output image:MergedGC_Image
    Select the color format:uint16
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
ConvertObjectsToImage:[module_num:24|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
    Select the input objects:InitialFC
    Name the output image:InitialFC_Image
    Select the color format:uint16
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
SaveImages:[module_num:25|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
    Select the type of image to save:Image
    Select the image to save:EnhancedRPA194
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Enhanced_RPA194
    Saved file format:tiff
    Output file location:Default Output Folder|/home/jjohn/Projects/ria/surf6_analysis/RDF_SAMPLE_IMAGES_063025/cellprofiler_output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:26|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
    Select the type of image to save:Image
    Select the image to save:NPM1_subtracted
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_NPM1_subtracted
    Saved file format:tiff
    Output file location:Default Output Folder|/home/jjohn/Projects/ria/surf6_analysis/RDF_SAMPLE_IMAGES_063025/cellprofiler_output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:27|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
    Select the type of image to save:Image
    Select the image to save:ErodedGC_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Eroded_GC_masks
    Saved file format:tiff
    Output file location:Default Output Folder|/home/jjohn/Projects/ria/surf6_analysis/RDF_SAMPLE_IMAGES_063025/cellprofiler_output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:28|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
    Select the type of image to save:Image
    Select the image to save:MergedGC_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_Merged_GC_masks
    Saved file format:tiff
    Output file location:Default Output Folder|/home/jjohn/Projects/ria/surf6_analysis/RDF_SAMPLE_IMAGES_063025/cellprofiler_output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:InitialFC_Image
    Select method for constructing file names:From image filename
    Select image name for file prefix:Input
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_FC_masks
    Saved file format:tiff
    Output file location:Default Output Folder|/home/jjohn/Projects/ria/surf6_analysis/RDF_SAMPLE_IMAGES_063025/cellprofiler_output
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:30|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notes:['']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|/home/jjohn/Projects/ria/surf6_analysis/RDF_SAMPLE_IMAGES_063025/cellprofiler_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
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